OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = /home/braineeg/Documentos/Online/OpenVibeScenarios/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 5
  First Class = OVTK_GDF_Right
  Second Class = OVTK_GDF_Tongue
  Baseline Duration (in sec) = 10
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 4
  Feedback Duration (in sec) = 0
  End of Trial Minimum Duration (in sec) = 2.500
  End of Trial Maximum Duration (in sec) = 4.500
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#0 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_GDF_Cue_Unknown_Undefined
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false

Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#3.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#3.Signal stream -> Temporal filter => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 3
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 50.000000
  Pass band ripple (dB) = 0.500000
Data=#5, Stimulations=#3.Stimulations, Channel Units=#3.Channel units -> 0xc67a01dc Signal display "Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Signal=#5, Stimulation=#3.Stimulations -> GDF file writer
  Filename = /home/braineeg/Documentos/Registros/EEG/Sxx/S05_FILT_S1R0.gdf
Input stream 2=#5, Input stream 3=#3.Stimulations -> Generic stream writer
  Filename = /home/braineeg/Documentos/Registros/EEG/Sxx/S05_FILT_S1R0.ov
  Use compression = false
Input stream 2=#3.Signal stream, Input stream 3=#3.Stimulations -> Generic stream writer
  Filename = /home/braineeg/Documentos/Registros/EEG/Sxx/S05_S1R0.ov
  Use compression = false
Signal=#3.Signal stream, Stimulation=#3.Stimulations -> GDF file writer
  Filename = /home/braineeg/Documentos/Registros/EEG/Sxx/S05_S1R0.gdf
