OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Overview

  Run this scenario to collect some training data. Those
  data will later be used to train a classifier
  for online use.

  When you start this scenario, just wait 40
  seconds before it starts the instruction sequence.

  You will then be presented right arrows to
  let you imagine right hand movements.
  There will be 30 arrows. If no arrow appears, just relax.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  Note: It is always a good idea to
  monitor the signals during an experiment

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = /home/braineeg/Documentos/Online/OpenVibeScenarios/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Right
  Second Class = OVTK_GDF_Tongue
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 4
  Feedback Duration (in sec) = 0
  End of Trial Minimum Duration (in sec) = 2.500
  End of Trial Maximum Duration (in sec) = 4.500
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#0 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_GDF_Cue_Unknown_Undefined
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false

Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#3.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#3.Signal stream -> Temporal filter => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 3
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 45
  Pass band ripple (dB) = 0.3
Input signal=#5, Input stimulations=#3.Stimulations -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Data=#5, Stimulations=#3.Stimulations, Channel Units=#3.Channel units -> Signal display "Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input signal=#5, Input stimulations=#3.Stimulations -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = EEG
Experiment information=#3.Experiment information, Signal=#5, Stimulation=#3.Stimulations -> GDF file writer
  Filename = /home/braineeg/Documentos/Registros/EEG/Sxx/S05_FILT_S1R1.gdf
Input stream 1=#3.Experiment information, Input stream 2=#5, Input stream 3=#3.Stimulations -> Generic stream writer
  Filename = /home/braineeg/Documentos/Registros/EEG/Sxx/S05_FILT_S1R1.ov
  Use compression = false
Input stream 1=#3.Experiment information, Input stream 2=#3.Signal stream, Input stream 3=#3.Stimulations -> 0xc67a01dc Generic stream writer
  Filename = /home/braineeg/Documentos/Registros/EEG/Sxx/S05_S1R1.ov
  Use compression = false
Experiment information=#3.Experiment information, Signal=#3.Signal stream, Stimulation=#3.Stimulations -> GDF file writer
  Filename = /home/braineeg/Documentos/Registros/EEG/Sxx/S05_S1R1.gdf
